monkeyml version=1.0
io_devices "IO Devices"
  iodevice stimulus_display "Stimulus Display": background_color=0.5, 0.5, 0.5, announce_stimuli_on_implicit_updates=YES
  iodevice eyelink "Eyelink 1000": data_interval=1ms, tracker_ip=100.1.1.1, pupil_lx=eyeRX, pupil_ly=eyeRY, pupil_size_r=pupil_size, tracking_dist=1024
  calibrator linear_eye_calibrator "Eye Cal": eyeh_raw=eyeRX, eyev_raw=eyeRY, eyeh_calibrated=eye_x, eyev_calibrated=eye_y
  iodevice nidaq "NIDaq Device": name=Dev1, update_interval=3ms, analog_input_data_interval=1ms, analog_output_data_interval=1ms, assume_multiplexed_adc=YES
    iochannel nidaq_analog_output_voltage "NIDAQ Analog Output Voltage Channel 0": channel_number=0, range_min=-10.0, range_max=10.0, voltage=ao0
    iochannel nidaq_digital_output "NIDAQ Digital Output Channel": port_number=1, num_lines_in_port=8, line7=rewardOut
variables "Variables"
  folder "Eye"
    variable any "eyeRX": groups=Eye, default_value=0, persistant=0
    variable any "eyeRY": groups=Eye, default_value=0, persistant=0
    variable any "eye_x": groups=Eye, default_value=0, persistant=0
    variable any "eye_y": groups=Eye, default_value=0, persistant=0
    variable any "pupil_size": groups=Eye, default_value=0, persistant=0
  folder "IO"
    variable any "ao0": groups=I/O, default_value=0, persistant=0
    variable any "doWord": groups=I/O, default_value=0, persistant=0
    variable any "doStrobe": groups=I/O, default_value=0, persistant=0
  folder "Reward"
    variable any "rewardOut": groups=Reward, default_value=0, persistant=0
    variable any "rewardDur": groups=Reward, default_value=200, persistant=0
  folder "Gobal"
    variable any "fix_win": groups=Fixation, default_value=10, persistant=1
    variable any "fixX": groups=Fixation, default_value=0, persistant=0
    variable any "fixY": groups=Fixation, default_value=0, persistant=0
    variable any "fixWaitDur": groups=Fixation, default_value=10000, persistant=1
    variable any "NoFixWaitDur": groups=Fixation, default_value=5000, persistant=1
    variable any "fix_sz": groups=Fixation, default_value=0.5, persistant=0
    variable any "fixOn": groups=Fixation, default_value=0, persistant=0
    variable any "fix_red": groups=Fixation, default_value=1, persistant=0
    variable any "fix_green": groups=Fixation, default_value=1, persistant=0
    variable any "fix_blue": groups=Fixation, default_value=1, persistant=0
    variable any "targetX": groups=Target, default_value=0, persistant=0
    variable any "targetY": groups=Target, default_value=0, persistant=0
    variable any "target_sz": groups=Target, default_value=0, persistant=0
    variable any "targetOn": groups=Target, default_value=0, persistant=0
    variable any "theta": groups=Target, default_value=0, persistant=0
    variable any "theta_min": groups=Target, default_value=0, persistant=0
    variable any "theta_max": groups=Target, default_value=315, persistant=0
    variable any "theta_N": groups=Target, default_value=8, persistant=0
    variable integer "override": groups=Target, default_value=0, persistant=0
    variable float "theta_override": groups=Target, default_value=0, persistant=0
    variable any "amp": groups=Trial, default_value=10, persistant=0
    variable any "pstop": groups=Trial, default_value=0, persistant=0
    variable any "startTrial": groups=Trial, default_value=0, persistant=0
    variable any "endTrial": groups=Trial, default_value=0, persistant=0
    variable any "localTrials": groups=Trial, default_value=0, persistant=0
    variable any "trialNum": groups=Trial, default_value=5000, persistant=0
    variable any "consecutiveCorrect": groups=Reward, default_value=0, persistant=0
    variable any "bonusRewDur": groups=Reward, default_value=0, persistant=0
    variable any "dbonus": groups=Reward, default_value=10, persistant=0
    variable any "timeRemaining": groups=Trial, default_value=0, persistant=0
    variable any "trialDuration": groups=Trial, default_value=2000, persistant=0
    variable any "on_targ": groups=Target, default_value=0, persistant=0
    variable any "targ_red": groups=Target, default_value=1, persistant=0
    variable any "targ_green": groups=Target, default_value=1, persistant=0
    variable any "targ_blue": groups=Target, default_value=1, persistant=0
    variable any "targ_sz": groups=Target, default_value=0.5, persistant=0
    variable any "target_x": groups=Target, default_value=0, persistant=0
    variable any "target_y": groups=Target, default_value=0, persistant=0
    variable any "target_alpha": groups=Target, default_value=1, persistant=1
    variable any "targetTimeDur": groups=Target, default_value=1000, persistant=0
    variable any "ballTimeDur": groups=Ball, default_value=1000, persistant=0
    variable any "saccadeTimeDur": groups=Trial, default_value=500, persistant=0
    variable any "memoryTimeDur": groups=Memory, default_value=1000, persistant=0
    variable any "GraceTimeDur": groups=Trial, default_value=100, persistant=0
    variable any "fix_time_dur": groups=Fixation, default_value=0, persistant=0
    variable any "fix_dur_min": groups=Fixation, default_value=500, persistant=1
    variable any "fix_dur_mean": groups=Fixation, default_value=0, persistant=1
    variable any "target_dur_min": groups=Target, default_value=500, persistant=1
    variable any "target_dur_mean": groups=Target, default_value=0, persistant=1
    variable any "memory_dur_min": groups=Memory, default_value=100, persistant=1
    variable any "memory_dur_mean": groups=Memory, default_value=0, persistant=1
    variable any "iti": groups=Trial, default_value=750, persistant=1
    variable any "timeout": groups=Trial, default_value=1500, persistant=1
    variable any "stimEnding": groups=Trial, default_value=0, persistant=0
  folder "Fixation+Pursuit"
    variable any "pursuitTheta": groups=Fixation, default_value=0, persistant=0
    variable any "on_fix_dyn": groups=Fixation, default_value=0, persistant=0
    variable any "fixHz": groups=Fixation, default_value=0.25, persistant=0
    variable any "fixDynMag": groups=Fixation, default_value=5, persistant=0
    variable any "tStart": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_trials": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_correct": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_HoldDur": groups=Fixation, default_value=3000, persistant=1
    variable any "fix_pur_ITI_Dur": groups=Fixation, default_value=750, persistant=1
    variable any "fix_pur_timeoutDur": groups=Fixation, default_value=1500, persistant=1
  folder "Fixation+Distractor"
    variable any "fix_dis_trials": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_correct": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOnset_min": groups=Distractor, default_value=100, persistant=1
    variable any "distractorOnset_mu": groups=Distractor, default_value=100, persistant=1
    variable any "distractorOnset_time": groups=Distractor, default_value=0, persistant=0
    variable any "distractorTime_min": groups=Distractor, default_value=100, persistant=1
    variable any "distractorTime_mu": groups=Distractor, default_value=100, persistant=1
    variable any "distractorTime": groups=Distractor, default_value=0, persistant=0
    variable any "distractorSize": groups=Distractor, default_value=0.5, persistant=0
    variable any "distractor_alpha": groups=Distractor, default_value=1, persistant=0
    variable any "distractor_x": groups=Distractor, default_value=0, persistant=0
    variable any "distractor_y": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOn": groups=Distractor, default_value=0, persistant=0
    variable boolean "DistractorSimultaneous": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_ITI_Dur": groups=Distractor, default_value=750, persistant=1
  folder "OverlapSaccade"
    variable any "OverlapSaccade_correct": groups=Overlap, default_value=0, persistant=0
    variable any "OverlapSaccade_trials": groups=Overlap, default_value=0, persistant=0
  folder "MemorySaccade"
    variable any "MemorySaccade_correct": groups=Memory, default_value=0, persistant=0
    variable any "MemorySaccade_trials": groups=Memory, default_value=0, persistant=0
  folder "MovingBall"
    variable any "MovingBall_trials": groups=MovingBall, default_value=0, persistant=0
    variable any "MovingBall_correct": groups=MovingBall, default_value=0, persistant=0
    variable any "interval": groups=MovingBall, default_value=600, persistant=0
    variable any "interval_min": groups=MovingBall, default_value=600, persistant=1
    variable any "interval_max": groups=MovingBall, default_value=1000, persistant=1
    variable any "interval_N": groups=MovingBall, default_value=5, persistant=1
    variable any "Nsets": groups=MovingBall, default_value=1, persistant=1
    variable any "ball_sz": groups=MovingBall, default_value=0.5, persistant=1
    variable any "StartTheta": groups=MovingBall, default_value=0, persistant=0
    variable any "intervalFrames": groups=MovingBall, default_value=0, persistant=0
    variable any "radius": groups=MovingBall, default_value=10, persistant=1
    variable any "ballArcLength": groups=MovingBall, default_value=180, persistant=1
    variable any "ballFeedback_red": groups=MovingBall, default_value=1, persistant=0
    variable any "ballFeedback_green": groups=MovingBall, default_value=1, persistant=0
    variable any "ballFeedback_blue": groups=MovingBall, default_value=1, persistant=0
    variable any "win_fraction": groups=MovingBall, default_value=0.5, persistant=1
    variable any "dwin": groups=MovingBall, default_value=0.01, persistant=1
    variable any "productionInterval": groups=MovingBall, default_value=0, persistant=0
    variable any "acquisitionTime": groups=MovingBall, default_value=0, persistant=0
    variable any "ballAlpha": groups=MovingBall, default_value=1, persistant=0
    variable any "flashAlpha": groups=MovingBall, default_value=1, persistant=1
    variable any "flashRate": groups=MovingBall, default_value=1, persistant=0
    variable any "dflashRate": groups=MovingBall, default_value=0.01, persistant=0
    variable any "Interval1_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "Interval2_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "prodBallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "Interval2BallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "Interval1BallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "ready_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "set_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "ready_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set1_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_cue_onset_time_us": groups=MovingBall, default_value=1e1000, persistant=0
    variable any "saccade_wait_dur": groups=MovingBall, default_value=3000, persistant=0
    variable any "cue_duration_frames": groups=MovingBall, default_value=6, persistant=1
    variable any "cue_size_deg": groups=MovingBall, default_value=1, persistant=1
    variable any "FeedbackTimeDur": groups=MovingBall, default_value=200, persistant=1
    variable boolean "afterReady": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterSet1": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterSet2": groups=MovingBall, default_value=0, persistant=0
    variable boolean "fixOffMovingBall": groups=MovingBall, default_value=0, persistant=1
    variable any "relativeFixOffTime": groups=MovingBall, default_value=0, persistant=1
    variable any "set2Off": groups=MovingBall, default_value=0, persistant=0
  folder "Matlab"
    variable any "sync": groups=Matlab, default_value=0, persistant=0
    variable any "Nback": groups=Matlab, default_value=100, persistant=1
sounds "Sounds"
stimuli "Stimuli"
  folder "Gobal"
    stimulus blank_screen "New Blank Screen": color=0, 0, 0
    stimulus circular_fixation_point "Fix": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=fix_sz, y_size=fix_sz, x_position=fixX, y_position=fixY, rotation=0, alpha_multiplier=1*(!((fixOffMovingBall)*((now()-set2_cue_onset_time_us)/1000 >= interval - relativeFixOffTime)*set2Off))
    stimulus circular_fixation_point "target": color=targ_red,targ_green,targ_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_targ, x_size=targ_sz, y_size=targ_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
  folder "Fixation+Pursuit"
    stimulus frame_list "dynamicFix": stimulus_group=dynamicFixFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "dynamicFixFrames"
      stimulus circular_fixation_point "fixCircleDyn": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_fix_dyn, x_size=fix_sz, y_size=fix_sz, x_position=fixX+cos(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), y_position=fixY+sin(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), rotation=0, alpha_multiplier=1
  folder "Fixation+Distractor"
    stimulus circle "Distractor": color=1,1,1, x_size=distractorSize, y_size=distractorSize, x_position=distractor_x, y_position=distractor_y, rotation=0, alpha_multiplier=distractor_alpha
  folder "MovingBall"
    stimulus circle "ballFeedback": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=radius*cos((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), y_position=radius*sin((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), rotation=1, alpha_multiplier=1
    stimulus frame_list "ready_cue": stimulus_group=ready_frames, ended=ready_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "ready_frames"
      stimulus circle "ready_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set_cue": stimulus_group=set_frames, ended=set_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set_frames"
      stimulus circle "set_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength/3)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength/3)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set2_cue": stimulus_group=set2_frames, ended=set2_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set2_frames"
      stimulus circle "set2_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1))), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1))), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "Interval1": stimulus_group=Interval1_frames, ending=Interval1_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval1_frames"
      stimulus circle "Interval1Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=0
    stimulus frame_list "Interval2": stimulus_group=Interval2_frames, ending=Interval2_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval2_frames"
      stimulus circle "Interval2Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=1
    stimulus frame_list "ball": stimulus_group=ballFrames, ending=stimEnding, repeats=(Nsets+1)*intervalFrames, loop=NO, autoplay=YES
    stimulus_group "ballFrames"
      stimulus circle "ballDynamic": color=1,1,1, x_size=ball_sz, y_size=ball_sz, x_position=radius*cos((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval))), y_position=radius*sin((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval))), rotation=1, alpha_multiplier=ballAlpha*(!(Nsets == 1))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval2_ending))*(!(!Interval2BallOn*Interval1_ending*!Interval2_ending))*(!(!Interval1BallOn*!Interval1_ending)) + ballAlpha*(!(Nsets == 2))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval1_ending))*(!(!Interval1BallOn*!Interval1_ending))
filters "Filters"
optimizers "Optimizers"
experiment "New Experiment"
  protocol "Fixation+Pursuit": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action live_queue_stimulus "Live Queue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If on_fix_dyn, Transition to Trial Start": condition=on_fix_dyn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=pursuitTheta
        action start_timer "Start HoldFix": timer=HoldFix, duration=fix_pur_HoldDur, duration_units=ms
        transition conditional "If !on_fix_dyn, Transition to Bad": condition=!on_fix_dyn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to Reward": target=Reward, timer=HoldFix
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_pur_correct": variable=fix_pur_correct, value=fix_pur_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_pur_trials": variable=fix_pur_trials, value=fix_pur_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Pursuit System": condition=localTrials >= trialNum, target=Exit Fixation Pursuit System
        transition conditional "If pstop, Transition to Exit Fixation Pursuit System": condition=pstop, target=Exit Fixation Pursuit System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_pur_ITI": timer=fix_pur_ITI, duration=fix_pur_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_pur_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Pursuit System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "Fixation+Distractor": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action if_else "If/Else"
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "Else, Select theta randomly": condition=1
            action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Assign distractor_x": variable=distractor_x, value=amp*cos(theta*pi()/180)
        action assignment "Assign distractor_y": variable=distractor_y, value=amp*sin(theta*pi()/180)
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action if "Conditionally Execute Actions": condition=DistractorSimultaneous
          action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=pursuitTheta
        action assignment "Assign distractorOnset_time": variable=distractorOnset_time, value=-distractorOnset_mu*logn(rand(0,1)) + distractorOnset_min
        action start_timer "Start DistractorWait": timer=DistractorWait, duration=distractorOnset_time, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to DistractorOn": target=DistractorOn, timer=DistractorWait
      task_system_state "DistractorOn"
        action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign distractorOn": variable=distractorOn, value=1
        action assignment "Assign distractorTime": variable=distractorTime, value=-distractorTime_mu*logn(rand(0,1)) + distractorTime_min
        action start_timer "Start DistractorTime": timer=DistractorTime, duration=distractorTime, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If DistractorTime Expired, Transition to DistractorOff": target=DistractorOff, timer=DistractorTime
      task_system_state "DistractorOff"
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign timeRemaining": variable=timeRemaining, value=trialDuration-distractorOnset_time - distractorTime
        action start_timer "Start RemainingTime": timer=RemainingTime, duration=timeRemaining, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If RemainingTime Expired, Transition to Reward": target=Reward, timer=RemainingTime
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=(consecutiveCorrect-1)*dbonus
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_dis_correct": variable=fix_dis_correct, value=fix_dis_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_dis_trials": variable=fix_dis_trials, value=fix_dis_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Distractor System": condition=localTrials >= trialNum, target=Exit Fixation Distractor System
        transition conditional "If pstop, Transition to Exit Fixation Distractor System": condition=pstop, target=Exit Fixation Distractor System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_dis_ITI": timer=fix_dis_ITI, duration=fix_dis_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_dis_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Distractor System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "OverlapSaccade": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action assignment "Assign pstop": variable=pstop, value=0
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 3": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 4"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
        action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
        transition conditional "If !fixOn, Transition to No Fix": condition=!fixOn, target=No Fix
        transition timer_expired "If GraceTime Expired, Transition to Trial Start": target=Trial Start, timer=GraceTime
      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If targetTime Expired, Transition to Fix Off": target=Fix Off, timer=targetTime
      task_system_state "Fix Off"
        action dequeue_stimulus "Dequeue fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to Reward": condition=on_targ, target=Reward
        transition timer_expired "If saccadeTime Expired, Transition to Bad": target=Bad, timer=saccadeTime
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=(consecutiveCorrect-1)*dbonus
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment OverlapSaccade_correct": variable=OverlapSaccade_correct, value=OverlapSaccade_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action assignment "Increment OverlapSaccade_trials": variable=OverlapSaccade_trials, value=OverlapSaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action report "Report no fixation": message=Failed to fixate.
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "MemorySaccade": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action assignment "Assign pstop": variable=pstop, value=0
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
        action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
        transition conditional "If !fixOn, Transition to No Fix": condition=!fixOn, target=No Fix
        transition timer_expired "If GraceTime Expired, Transition to Trial Start": target=Trial Start, timer=GraceTime
      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If targetTime Expired, Transition to Memory Time": target=Memory Time, timer=targetTime
      task_system_state "Memory Time"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=memoryTimeDur, value=-memory_dur_mean*logn(rand(0,1)) + memory_dur_min
        action start_timer "Start memoryTime": timer=memoryTime, duration=memoryTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If memoryTime Expired, Transition to Fix Off": target=Fix Off, timer=memoryTime
      task_system_state "Fix Off"
        action dequeue_stimulus "Dequeue fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to Reward": condition=on_targ, target=Reward
        transition timer_expired "If saccadeTime Expired, Transition to Bad": target=Bad, timer=saccadeTime
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action live_queue_stimulus "Live Queue target": stimulus=target
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=(consecutiveCorrect-1)*dbonus
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment MemorySaccade_correct": variable=MemorySaccade_correct, value=MemorySaccade_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action assignment "Increment MemorySaccade_trials": variable=MemorySaccade_trials, value=MemorySaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action report "Report no fixation": message=Failed to fixate.
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "MovingBall": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 2"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
        action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
        action assignment "Assign afterReady": variable=afterReady, value=0
        action assignment "Assign afterSet1": variable=afterSet1, value=0
        action assignment "Assign afterSet2": variable=afterSet2, value=0
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
        action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
        transition conditional "If !fixOn, Transition to No Fix": condition=!fixOn, target=No Fix
        transition timer_expired "If GraceTime Expired, Transition to Trial Start": target=Trial Start, timer=GraceTime
      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign sync": variable=sync, value=1
        action assignment "Reset stimEnding": variable=stimEnding, value=0
        action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action assignment "Select interval": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
        action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
        action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=(Nsets+1)*interval
        action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
        action assignment "Assign Nsets": variable=Nsets, value=Nsets
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Abort": condition=!fixOn, target=Abort
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Abort": condition=!fixOn, target=Abort
        transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
      task_system_state "Ready"
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action live_queue_stimulus "Live Queue ball": stimulus=ball
        action queue_stimulus "Queue ready cue": stimulus=ready_cue
        action queue_stimulus "Queue Interval1": stimulus=Interval1
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Ready": condition=!fixOn, target=After Ready
        transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending && Nsets == 1, target=Set 2
        transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
      task_system_state "Set"
        action queue_stimulus "Queue Interval2": stimulus=Interval2
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action assignment "Reset set_ended": variable=set_ended, value=0
        action queue_stimulus "Queue set cue": stimulus=set_cue
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
        transition conditional "When set cue presentation completes, go to Set 2": condition=Interval2_ending, target=Set 2
      task_system_state "Set 2"
        action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set2_ended, value=0
        action queue_stimulus "Queue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
          action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
        action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
        transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
      task_system_state "Production Interval"
        action assignment "Store set2Off": variable=set2Off, value=1
        action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign afterSet2": variable=afterSet2, value=1
        action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
        transition conditional "If !fixOn Transition to Production": condition=!fixOn, target=Production
        transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
      task_system_state "Production"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
        transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
      task_system_state "TargetAcquired"
        action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
        transition direct "Always Go to Early or Late": target=Early or Late
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
        action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
        action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction-dwin
        action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
        action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
        action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
        action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
        action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
        action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
        action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
        action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
        action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
        action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set_ended, value=0
        action assignment "Assign Nback": variable=Nback, value=Nback
        action assignment "Store set2Off": variable=set2Off, value=0
        action assignment "Assign sync": variable=sync, value=0
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Early or Late"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
      task_system_state "Abort"
        action report "Report trial aborted": message=Trial aborted!
        action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "After Ready"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - ready_cue_onset_time_us -interval*2000) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action assignment "Assign afterReady": variable=afterReady, value=1
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "After Set1"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action assignment "Assign afterSet1": variable=afterSet1, value=1
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "No Saccade"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action if_else "If/Else 2"
          action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
            action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction+dwin
            action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
          action if "Else": condition=1
            action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
            action assignment "Assign flashRate": variable=flashRate, value=flashRate
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action report "Report no fixation": message=Failed to fixate.
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
