monkeyml version=1.0
io_devices "IO Devices"
  iodevice stimulus_display "Stimulus Display": background_color=0.5, 0.5, 0.5, announce_stimuli_on_implicit_updates=NO
  iodevice eyelink "Eyelink 1000": data_interval=1ms, tracker_ip=100.1.1.1, eye_rx=eye_rx, eye_ry=eye_ry, eye_lx=eye_lx, eye_ly=eye_ly, pupil_rx=pupil_rx, pupil_ry=pupil_ry, pupil_lx=pupil_lx, pupil_ly=pupil_ly, pupil_size_r=pupil_size_r, pupil_size_l=pupil_size_l, tracking_dist=1024
  iodevice mouse_input "Mouse Input Device": mouse_position_x=mouseX, mouse_position_y=mouseY, mouse_down=mouseDown, hide_cursor=YES
  calibrator standard_eye_calibrator "eye_calibrator": eyeh_raw=pupil_lx, eyev_raw=pupil_ly, eyeh_calibrated=eye_x, eyev_calibrated=eye_y
  iodevice labjack_ljm "labjack_ljm": update_interval=3ms, device_type=T7, connection_type=USB, autostart=YES
    iochannel labjack_ljm_digital_output "labjack_ljm_digital_output": line=FIO0, value=reward_line
    iochannel labjack_ljm_digital_output "labjack_ljm_digital_output 2": line=FIO2, value=labjack_target_on
    iochannel labjack_ljm_digital_output "labjack_ljm_digital_output 3": line=FIO3, value=labjack_cue_on
    iochannel labjack_ljm_digital_output "labjack_ljm_digital_output 4": line=FIO1, value=labjack_fixation_on
variables "Variables"
  folder "Eye"
    variable any "eye_rx": groups=Eye, logging=never, default_value=0, persistant=0
    variable any "eye_ry": groups=Eye, logging=never, default_value=0, persistant=0
    variable any "eye_lx": groups=Eye, default_value=0, persistant=0
    variable any "eye_ly": groups=Eye, default_value=0, persistant=0
    variable any "eye_x": groups=Eye, default_value=0, persistant=0
    variable any "eye_y": groups=Eye, default_value=0, persistant=0
    variable any "pupil_rx": groups=Eye, default_value=0, persistant=0
    variable any "pupil_ry": groups=Eye, default_value=0, persistant=0
    variable any "pupil_lx": groups=Eye, default_value=0, persistant=0
    variable any "pupil_ly": groups=Eye, default_value=0, persistant=0
    variable any "pupil_size_r": groups=Eye, default_value=0, persistant=0
    variable any "pupil_size_l": groups=Eye, default_value=0, persistant=0
  folder "eyeFix"
    variable any "fix_win": groups=eyeFix, default_value=7, persistant=1
    variable any "fix_sz": groups=eyeFix, default_value=0.5, persistant=0
    variable any "fixX": groups=eyeFix, default_value=0, persistant=0
    variable any "fixY": groups=eyeFix, default_value=0, persistant=0
    variable any "fix_red": groups=eyeFix, default_value=1, persistant=0
    variable any "fix_green": groups=eyeFix, default_value=1, persistant=0
    variable any "fix_blue": groups=eyeFix, default_value=1, persistant=0
    variable any "fixOn": groups=eyeFix, default_value=0, persistant=0
    variable any "dFixY": groups=eyeFix, default_value=0.0001, persistant=0
    variable any "fixWaitDur": groups=eyeFix, default_value=300000, persistant=1
    variable any "NoFixWaitDur": groups=eyeFix, default_value=1000, persistant=1
    variable any "GraceTimeDur": groups=eyeFix, default_value=200, persistant=0
  folder "target"
    variable any "targetOn": groups=target, default_value=0, persistant=0
    variable any "theta": groups=target, default_value=0, persistant=0
    variable any "thetaFeedback": groups=target, default_value=0, persistant=0
    variable any "theta_min": groups=target, default_value=0, persistant=0
    variable any "theta_max": groups=target, default_value=180, persistant=0
    variable any "theta_N": groups=target, default_value=2, persistant=0
    variable any "StartTheta": groups=target, default_value=0, persistant=0
    variable any "ballArcLength": groups=target, default_value=180, persistant=1
    variable integer "override": groups=target, default_value=0, persistant=0
    variable float "theta_override": groups=target, default_value=0, persistant=0
    variable any "amp": groups=target, default_value=10, persistant=0
    variable any "on_targ": groups=target, default_value=0, persistant=0
    variable any "targ_red": groups=target, default_value=1, persistant=0
    variable any "targ_green": groups=target, default_value=1, persistant=0
    variable any "targ_blue": groups=target, default_value=1, persistant=0
    variable any "targ_sz": groups=target, default_value=0.5, persistant=0
    variable any "target_x": groups=target, default_value=0, persistant=0
    variable any "target_y": groups=target, default_value=0, persistant=0
    variable any "target_alpha": groups=target, default_value=1, persistant=1
  folder "IO_potentiometer"
    variable any "ao0": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "ai0": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "doWord": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "doStrobe": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "leftV": groups=IO_potentiometer, default_value=-0.001, persistant=0
    variable any "rightV": groups=IO_potentiometer, default_value=-5.02, persistant=0
    variable any "centerV": groups=IO_potentiometer, default_value=-2.51, persistant=0
    variable any "gainV": groups=IO_potentiometer, default_value=1.8, persistant=0
  folder "handFixation"
    variable any "leverFixWin": groups=handFixation, default_value=2, persistant=0
    variable any "leverFixWinBackCenter": groups=handFixation, default_value=2, persistant=0
    variable any "leverFixWinInit": groups=handFixation, default_value=2, persistant=0
    variable any "leverTarWin": groups=handFixation, default_value=18, persistant=0
    variable any "leverTarWinBackCenter": groups=handFixation, default_value=18, persistant=0
    variable any "leverTarWinInit": groups=handFixation, default_value=18, persistant=0
    variable any "handFixWin": groups=handFixation, default_value=5, persistant=0
    variable any "handFixOn": groups=handFixation, default_value=0, persistant=0
    variable any "handFixSz": groups=handFixation, default_value=0.5, persistant=0
    variable any "handFixAlpha": groups=handFixation, default_value=1, persistant=0
    variable any "handFixAlpha2": groups=handFixation, default_value=1, persistant=0
    variable any "pHandFix2": groups=handFixation, default_value=0.8, persistant=0
    variable any "handFixX": groups=handFixation, default_value=0, persistant=0
    variable any "handFixX2": groups=handFixation, default_value=0, persistant=0
    variable any "handFixY": groups=handFixation, default_value=0, persistant=0
    variable any "handFixB": groups=handFixation, default_value=1, persistant=0
    variable any "handFixG": groups=handFixation, default_value=1, persistant=0
    variable any "handFixR": groups=handFixation, default_value=1, persistant=0
    variable any "cursorX": groups=handFixation, default_value=0, persistant=0
    variable any "cursor2x": groups=handFixation, default_value=0, persistant=0
    variable any "cursor2x0": groups=handFixation, default_value=0, persistant=0
    variable any "cursorAlpha": groups=handFixation, default_value=1, persistant=0
    variable any "cursorAlpha2": groups=handFixation, default_value=0, persistant=0
  folder "handTarget"
    variable any "mouseX": groups=handTarget, default_value=0, persistant=0
    variable any "mouseY": groups=handTarget, default_value=0, persistant=0
    variable any "mouseDown": groups=handTarget, default_value=0, persistant=0
    variable any "handTargetWin": groups=handTarget, default_value=4, persistant=0
    variable any "handTargetOn": groups=handTarget, default_value=0, persistant=0
    variable any "handTarg_sz": groups=handTarget, default_value=0.5, persistant=0
    variable any "cursor2Alpha": groups=handTarget, default_value=0, persistant=0
    variable any "durCursorMove": groups=handTarget, default_value=1, persistant=0
    variable any "dtHandTargetHandFix": groups=handTarget, default_value=300, persistant=0
    variable any "dtSetHandTarget": groups=handTarget, default_value=0, persistant=0
    variable any "dtReadyHandTarget": groups=handTarget, default_value=0, persistant=0
  folder "labjack"
    variable any "labjack_target_on": groups=labjack, default_value=0, persistant=0
    variable any "labjack_cue_on": groups=labjack, default_value=0, persistant=0
    variable any "t_labjack_cue_on": groups=labjack, default_value=0, persistant=0
    variable any "labjack_fixation_on": groups=labjack, default_value=0, persistant=0
  folder "Reward"
    variable any "reward_line": groups=Reward, default_value=0, persistant=0
    variable any "rewardDur": groups=Reward, default_value=70, persistant=0
    variable any "bonusRewDur": groups=Reward, default_value=0, persistant=0
    variable any "totalRewDur": groups=Reward, default_value=0, persistant=0
    variable any "dbonus": groups=Reward, default_value=0, persistant=0
    variable any "consecutiveCorrect": groups=Reward, default_value=0, persistant=0
    variable any "consecutiveIncorrect": groups=Reward, default_value=0, persistant=0
    variable any "win_fraction": groups=Reward, default_value=0.15, persistant=1
    variable any "dwin": groups=Reward, default_value=0, persistant=1
  folder "RSGtiming"
    variable any "tStart": groups=RSGtiming, default_value=0, persistant=0
    variable any "fix_time_dur": groups=RSGtiming, default_value=0, persistant=0
    variable any "fix_dur_min": groups=RSGtiming, default_value=500, persistant=1
    variable any "fix_dur_mean": groups=RSGtiming, default_value=250, persistant=1
    variable any "targetTimeDur": groups=RSGtiming, default_value=1000, persistant=0
    variable any "target_dur_min": groups=RSGtiming, default_value=250, persistant=1
    variable any "target_dur_mean": groups=RSGtiming, default_value=250, persistant=1
    variable any "saccade_wait_dur": groups=RSGtiming, default_value=1000, persistant=0
    variable any "saccadeTimeDur": groups=RSGtiming, default_value=200, persistant=0
    variable any "handTimeDur": groups=RSGtiming, default_value=200, persistant=0
    variable any "dtProdRew": groups=RSGtiming, default_value=0
    variable any "FeedbackTimeDur": groups=RSGtiming, default_value=500, persistant=1
    variable any "iti": groups=RSGtiming, default_value=500, persistant=1
    variable any "itiShort": groups=RSGtiming, default_value=1220, persistant=1
    variable any "itiLong": groups=RSGtiming, default_value=500, persistant=1
    variable any "timeout": groups=RSGtiming, default_value=1000, persistant=1
  folder "trialBlock"
    variable any "localTrials": groups=trialBlock, default_value=0, persistant=0
    variable any "localCompleteTrials": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_trials": groups=trialBlock, default_value=0, persistant=0
    variable any "N_complete": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correct": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correctLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correctRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortHandLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortHandRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortEyeLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortEyeRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongHandLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongHandRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongEyeLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongEyeRight": groups=trialBlock, default_value=0, persistant=0
    variable any "minTrialNumBlock": groups=trialBlock, default_value=10, persistant=0
    variable any "meanTrialNumBlock": groups=trialBlock, default_value=3, persistant=0
    variable any "maxTrialNumBlock": groups=trialBlock, default_value=25, persistant=0
    variable any "trialNumBlockLong": groups=trialBlock, default_value=10, persistant=0
    variable any "trialNumBlockShort": groups=trialBlock, default_value=10, persistant=0
    variable any "trialNum": groups=trialBlock, default_value=5000, persistant=0
  folder "noSet"
    variable any "pNoSet": default_value=0.05
    variable any "idNoSet": default_value=0
    variable any "nNoSet": default_value=0
    variable any "nCorrectNoSet": default_value=0
    variable any "waitDur": default_value=400
  folder "RSG"
    variable any "interval": groups=RSG, default_value=800, persistant=0
    variable any "productionInterval": groups=RSG, default_value=0, persistant=0
    variable any "idShortLong": groups=RSG, default_value=0, persistant=0
    variable any "idHandEye": groups=RSG, default_value=1, persistant=0
    variable any "randTmp": groups=RSG, default_value=1, persistant=0
    variable any "interval_min": groups=RSG, default_value=500, persistant=1
    variable any "interval_minShort": groups=RSG, default_value=480, persistant=1
    variable any "interval_minLong": groups=RSG, default_value=800, persistant=1
    variable any "interval_max": groups=RSG, default_value=1200, persistant=1
    variable any "interval_maxShort": groups=RSG, default_value=800, persistant=1
    variable any "interval_maxLong": groups=RSG, default_value=1200, persistant=1
    variable any "interval_N": groups=RSG, default_value=5, persistant=1
    variable any "radius": groups=RSG, default_value=0, persistant=1
    variable any "ballFeedback_red": groups=RSG, default_value=1, persistant=0
    variable any "ballFeedback_green": groups=RSG, default_value=1, persistant=0
    variable any "ballFeedback_blue": groups=RSG, default_value=1, persistant=0
    variable any "Interval1_ending": groups=RSG, default_value=0, persistant=0
    variable any "Interval2_ending": groups=RSG, default_value=0, persistant=0
    variable any "ready_ended": groups=RSG, default_value=0, persistant=0
    variable any "set_ended": groups=RSG, default_value=0, persistant=0
    variable any "occluder_ended": groups=RSG, default_value=0, persistant=0
    variable any "set2_ended": groups=RSG, default_value=0, persistant=0
    variable any "acquisitionTime": groups=RSG, default_value=0, persistant=0
    variable any "ready_cue_onset_time_us": groups=RSG, default_value=0, persistant=0
    variable any "set1_cue_onset_time_us": groups=RSG, default_value=0, persistant=0
    variable any "set2_cue_onset_time_us": groups=RSG, default_value=1e1000, persistant=0
    variable any "intervalFrames": groups=RSG, default_value=0, persistant=0
    variable any "cue_duration_frames": groups=RSG, default_value=6, persistant=1
    variable any "cue_size_deg": groups=RSG, default_value=2.2, persistant=1
    variable boolean "afterReady": groups=RSG, default_value=0, persistant=0
    variable boolean "afterSet1": groups=RSG, default_value=0, persistant=0
    variable boolean "afterSet2": groups=RSG, default_value=0, persistant=0
    variable any "set2Off": groups=RSG, default_value=0, persistant=0
  folder "OverlapSaccade"
    variable any "idHandEyeOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correct": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeft": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeftHand": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeftEye": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRight": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRightHand": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRightEye": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_Hand2OtherTarget": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_LateRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_trials": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "trialNum_OverlapSaccade": groups=OverlapSaccade, default_value=5000, persistant=0
    variable any "RTfromTargetOn": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "minEyeRT": groups=OverlapSaccade, default_value=100, persistant=0
    variable any "minHandRT": groups=OverlapSaccade, default_value=100, persistant=0
  folder "Global"
    variable any "pstop": groups=Global, default_value=0, persistant=0
    variable any "startTrial": groups=Global, default_value=0, persistant=0
    variable any "endTrial": groups=Global, default_value=0, persistant=0
  folder "sync"
    variable any "syncX": groups=Matlab, default_value=-20, persistant=0
    variable any "syncY": groups=Matlab, default_value=11.7, persistant=0
    variable any "syncSize": groups=Matlab, default_value=2.5, persistant=0
    variable float "stateAnalogOut": groups=STATE, default_value=0, persistant=0
    variable any "trialSync": groups=Reward, default_value=0, persistant=0
  folder "Fixation+Pursuit"
    variable any "pursuitTheta": groups=Fixation, default_value=0, persistant=0
    variable any "on_fix_dyn": groups=Fixation, default_value=0, persistant=0
    variable any "fixHz": groups=Fixation, default_value=0.25, persistant=0
    variable any "fixDynMag": groups=Fixation, default_value=5, persistant=0
    variable any "fix_pur_trials": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_correct": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_HoldDur": groups=Fixation, default_value=3000, persistant=1
    variable any "fix_pur_ITI_Dur": groups=Fixation, default_value=750, persistant=1
    variable any "fix_pur_timeoutDur": groups=Fixation, default_value=1500, persistant=1
  folder "Fixation+Distractor"
    variable any "idDistOverlap": groups=Distractor, default_value=0
    variable any "trialDuration": groups=Distractor, default_value=2500, persistant=0
    variable any "timeRemaining": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_trials": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_correct": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOnset_min": groups=Distractor, default_value=500, persistant=1
    variable any "distractorOnset_mu": groups=Distractor, default_value=500, persistant=1
    variable any "distractorOnset_time": groups=Distractor, default_value=0, persistant=0
    variable any "distractorTime_min": groups=Distractor, default_value=500, persistant=1
    variable any "distractorTime_mu": groups=Distractor, default_value=500, persistant=1
    variable any "distractorTime": groups=Distractor, default_value=0, persistant=0
    variable any "distractorSize": groups=Distractor, default_value=0.5, persistant=0
    variable any "distractor_alpha": groups=Distractor, default_value=1, persistant=0
    variable any "distractor_x": groups=Distractor, default_value=0, persistant=0
    variable any "distractor_y": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOn": groups=Distractor, default_value=0, persistant=0
    variable boolean "DistractorSimultaneous": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_ITI_Dur": groups=Distractor, default_value=750, persistant=1
  folder "MemorySaccade"
    variable any "MemorySaccade_correct": groups=Memory, default_value=0, persistant=0
    variable any "MemorySaccade_trials": groups=Memory, default_value=0, persistant=0
    variable any "memoryTimeDur": groups=Memory, default_value=1000, persistant=0
    variable any "memory_dur_min": groups=Memory, default_value=100, persistant=1
    variable any "memory_dur_mean": groups=Memory, default_value=0, persistant=1
  folder "RSGlegacy"
    variable any "ballAlpha": groups=RSGlegacy, default_value=0, persistant=0
    variable any "maxBallAlpha": groups=RSGlegacy, default_value=0.07, persistant=0
    variable any "ballAlphaProd": groups=RSGlegacy, default_value=0, persistant=0
    variable any "maxBallAlphaProd": groups=RSGlegacy, default_value=0.07, persistant=0
    variable any "dAlpha": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dballAlphaProd": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dballAlphaIncorrect": groups=RSGlegacy, default_value=0, persistant=1
    variable any "stimEnding": groups=RSGlegacy, default_value=0, persistant=0
    variable any "Nsets": groups=RSGlegacy, default_value=1, persistant=1
    variable any "ball_sz": groups=RSGlegacy, default_value=0.25, persistant=1
    variable any "radiusBall": groups=RSGlegacy, default_value=10, persistant=1
    variable any "radiusStep": groups=RSGlegacy, default_value=0, persistant=1
    variable any "numRadiusStepBoost": groups=RSGlegacy, default_value=10
    variable any "flashRate": groups=RSGlegacy, default_value=1, persistant=0
    variable any "flashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "setFlashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "thSetFlashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "idFlashAlpha": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dflashRate": groups=RSGlegacy, default_value=0, persistant=0
    variable any "ballRed": groups=RSGlegacy, default_value=1, persistant=0
    variable any "ballGreen": groups=RSGlegacy, default_value=1, persistant=0
    variable any "ballBlue": groups=RSGlegacy, default_value=1, persistant=0
    variable any "prodBallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable any "Interval2BallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable any "Interval1BallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable boolean "fixOffMovingBall": groups=RSGlegacy, default_value=0, persistant=1
    variable any "relativeFixOffTime": groups=RSGlegacy, default_value=0, persistant=1
    variable any "idRandSet": groups=RSGlegacy, default_value=0
  folder "Matlab"
    variable any "sync": groups=Matlab, default_value=0, persistant=0
    variable any "Nback": groups=Matlab, default_value=0, persistant=1
sounds "Sounds"
stimuli "Stimuli"
  folder "Gobal"
    stimulus blank_screen "New Blank Screen": color=0, 0, 0
    stimulus circular_fixation_point "Fix": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=fix_sz, y_size=fix_sz, x_position=fixX, y_position=fixY, rotation=0, alpha_multiplier=1*(!((fixOffMovingBall)*((now()-set2_cue_onset_time_us)/1000 >= interval - relativeFixOffTime)*set2Off))
    stimulus circular_fixation_point "Fix2": color=0,0,0, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=(fix_sz+handFixSz)*2, y_size=(fix_sz+handFixSz)*2, x_position=(fixX+handFixX)/2, y_position=(fixY+handFixY)/2, rotation=0, alpha_multiplier=1*(!((fixOffMovingBall)*((now()-set2_cue_onset_time_us)/1000 >= interval - relativeFixOffTime)*set2Off))
    stimulus fixation_point "handFix": color=handFixR,handFixG,handFixB, trigger_width=handFixWin, trigger_watch_x=mouseX, trigger_watch_y=mouseY, trigger_flag=handFixOn, x_size=handFixSz, y_size=handFixSz, x_position=handFixX, y_position=handFixY, rotation=0, alpha_multiplier=handFixAlpha
    stimulus rectangle "handFix2": color=0,0,0, x_size=handFixSz*pHandFix2, y_size=handFixSz*pHandFix2, x_position=handFixX, y_position=handFixY, rotation=0, alpha_multiplier=1
    stimulus circular_fixation_point "target": color=targ_red,targ_green,targ_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_targ, x_size=targ_sz, y_size=targ_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
    stimulus circular_fixation_point "handTarget": color=targ_red,targ_green,targ_blue, trigger_width=handTargetWin, trigger_watch_x=mouseX, trigger_watch_y=mouseY, trigger_flag=handTargetOn, x_size=handTarg_sz, y_size=handTarg_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
    stimulus frame_list "cursor": stimulus_group=cursorFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "cursorFrames"
      stimulus rectangle "cursorDynamic": color=1,1,1, x_size=ball_sz, y_size=ball_sz, x_position=(ai0-centerV)/(rightV-centerV)*amp*gainV, y_position=handFixY, rotation=1, alpha_multiplier=cursorAlpha
    stimulus frame_list "cursor 2": stimulus_group=cursorFrames 2, loop=YES, repeats=0, autoplay=YES
    stimulus_group "cursorFrames 2"
      stimulus rectangle "cursorDynamic 2": color=1,1,1, x_size=ball_sz, y_size=ball_sz, x_position=cursor2x0+(target_x-cursor2x0)/(1e3*durCursorMove)*(nextFrameTime() - acquisitionTime), y_position=handFixY, rotation=1, alpha_multiplier=cursor2Alpha
    stimulus frame_list "syncFlash": stimulus_group=syncFlashFrames, loop=NO, repeats=0, autoplay=YES
    stimulus_group "syncFlashFrames"
      range_replicator "Repeat 2 times": from=1, to=2, step=1, variable=rr_index
        stimulus circle "syncFlashFrames_frame_${rr_index}": color=1,1,1, x_size=syncSize, y_size=syncSize, x_position=syncX, y_position=syncY, rotation=0, alpha_multiplier=1
  folder "Fixation+Pursuit"
    stimulus frame_list "dynamicFix": stimulus_group=dynamicFixFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "dynamicFixFrames"
      stimulus circular_fixation_point "fixCircleDyn": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_fix_dyn, x_size=fix_sz, y_size=fix_sz, x_position=fixX+cos(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), y_position=fixY+sin(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), rotation=0, alpha_multiplier=1
  folder "Fixation+Distractor"
    stimulus circle "Distractor": color=1,1,1, x_size=distractorSize, y_size=distractorSize, x_position=distractor_x, y_position=distractor_y, rotation=0, alpha_multiplier=distractor_alpha
  folder "MovingBall"
    stimulus circle "ballFeedback": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=amp*cos((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), y_position=amp*sin((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), rotation=1, alpha_multiplier=1
    stimulus frame_list "ready_cue": stimulus_group=ready_frames, ended=ready_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "ready_frames"
      stimulus circle "ready_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+(fixY+handFixY)/2, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "occluder_cue": stimulus_group=occluder_frames, ended=occluder_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "occluder_frames"
      stimulus circle "occluder_frame": color=0,0,0, x_size=cue_size_deg*4/5, y_size=cue_size_deg*4/5, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set_cue": stimulus_group=set_frames, ended=set_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set_frames"
      stimulus circle "set_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength/3)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength/3))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set2_cue": stimulus_group=set2_frames, ended=set2_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set2_frames"
      stimulus circle "set2_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1))), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1)))+(fixY+handFixY)/2, rotation=0, alpha_multiplier=setFlashAlpha
    stimulus frame_list "Interval1": stimulus_group=Interval1_frames, ending=Interval1_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval1_frames"
      stimulus circle "Interval1Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=0
    stimulus frame_list "Interval2": stimulus_group=Interval2_frames, ending=Interval2_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval2_frames"
      stimulus circle "Interval2Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=1
    stimulus frame_list "ball": stimulus_group=ballFrames, ending=stimEnding, repeats=(Nsets+1)*intervalFrames, loop=NO, autoplay=YES
    stimulus_group "ballFrames"
      stimulus circle "ballDynamic": color=ballRed,ballGreen,ballBlue, x_size=ball_sz, y_size=ball_sz, x_position=radiusBall*cos((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval))), y_position=radiusBall*sin((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval)))+fixY, rotation=1, alpha_multiplier=(ballAlpha*(!(Nsets == 1))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval2_ending))*(!(!Interval2BallOn*Interval1_ending*!Interval2_ending))*(!(!Interval1BallOn*!Interval1_ending)) + ballAlpha*(!(Nsets == 2))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval1_ending))*(!(!Interval1BallOn*!Interval1_ending)))*(!Interval1_ending) +(Interval1_ending*ballAlphaProd)
filters "Filters"
optimizers "Optimizers"
experiment "New Experiment"
  protocol "RSG_twoPrior_handEye_seqSwitch photosync": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start labjack_ljm": device=labjack_ljm
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign stateAnalogOut 19": variable=stateAnalogOut, value=0
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=1
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_rand": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333329"
        task_system_state "Initial"
          action assignment "Assign stateAnalogOut 110": variable=stateAnalogOut, value=0
          action assignment "Assign randTmp": variable=randTmp, value=1-randTmp
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
            action assignment "Set idShortLong": variable=idShortLong, value=1-idShortLong
            action assignment "Assign fixY 9": variable=fixY, value=-fixY
            action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
            action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
            action assignment "Select interval_min": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
            action assignment "Select interval_max": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          action if "If randTmp==1 && localTrials>0, change idShortLong": condition=randTmp==1 && localTrials>0
            action assignment "Set idShortLong": variable=idShortLong, value=1-idShortLong
            action assignment "Assign fixY 9": variable=fixY, value=-fixY
            action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
            action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
            action assignment "Select interval_min": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
            action assignment "Select interval_max": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          action if "If randTmp==2 && localTrials>0, change idShortLong & idHandEye": condition=randTmp==2 && localTrials>0
            action assignment "Set idShortLong": variable=idShortLong, value=1-idShortLong
            action assignment "Assign fixY 9": variable=fixY, value=-fixY
            action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
            action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
            action assignment "Select interval_min": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
            action assignment "Select interval_max": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
            action assignment "Assign idHandEye 8": variable=idHandEye, value=1-idHandEye
          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign targ_green": variable=targ_green, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_green, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 111": variable=stateAnalogOut, value=5/50*5
          action pulse "Pulse trialSync 2": variable=trialSync, duration=10*1000
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Trial Start"
          action assignment "Assign stateAnalogOut 113": variable=stateAnalogOut, value=10/50*5
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
              action if "If consecutiveIncorrect==4, sample theta & interval": condition=consecutiveIncorrect ==4
                action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
                action assignment "Select interval": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
                action assignment "assign consecutiveIncorrect 2": variable=consecutiveIncorrect, value=0
              action if "Else, Select repeat": condition=consecutiveIncorrect !=4
                action assignment "Select theta": variable=theta, value=theta
                action assignment "Select interval": variable=interval, value=interval
          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
            action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
            action assignment "Select interval": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Assign labjack_fixation_on": variable=labjack_fixation_on, value=1
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 2": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 110"
          action report "Report fixating": message=Fixating.
          transition conditional "If !fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)> leverFixWinInit/2, target=Abort
          transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
        task_system_state "Target On"
          action assignment "Assign labjack_target_on": variable=labjack_target_on, value=1
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 2": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 3": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 114": variable=stateAnalogOut, value=15/50*5
          action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
          transition conditional "If fixOn == 0 | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
        task_system_state "Ready"
          action assignment "Assign labjack_cue_on": variable=labjack_cue_on, value=1
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 3": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 4": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 115": variable=stateAnalogOut, value=20/50*5
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If wrong modality, Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Ready 2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action assignment "Assign labjack_cue_on": variable=labjack_cue_on, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 4": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 5": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 116": variable=stateAnalogOut, value=25/50*5
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Set2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set2
          transition conditional "If wrong modality, Transition to Abort 2": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*!handFixOn, Transition to Production": condition=(idHandEye==1)*(!fixOn)+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Production
          transition conditional "If (idHandEye==0)*(!fixOn)+(idHandEye==1)*(!handFixOn), Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to No Saccade": target=No Saccade, timer=saccade_wait
        task_system_state "Production"
          action assignment "Assign labjack_fixation_on": variable=labjack_fixation_on, value=0
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=(idHandEye==0)*handTimeDur+(idHandEye==1)*saccadeTimeDur, duration_units=ms
          action assignment "Assign stateAnalogOut 117": variable=stateAnalogOut, value=30/50*5
          transition conditional "If on_targ, Transition to TargetAcquired": condition=(idHandEye==1)*on_targ+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(target_x+handFixX2))<leverTarWinInit/2), target=TargetAcquired
          transition conditional "If !fixOn, Transition to Abort 2": condition=(idHandEye==0)*!fixOn+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "(not used but keep) If go to the other target, Transition to Abort": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x+handFixX2))<leverTarWinInit/2, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign stateAnalogOut 118": variable=stateAnalogOut, value=35/50*5
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Increment N_complete": variable=N_complete, value=N_complete +1
          action assignment "Increment localCompleteTrials": variable=localCompleteTrials, value=localCompleteTrials +1
          transition conditional "If correct, Transition to Reward 2": condition=abs(productionInterval - interval)/interval <= win_fraction, target=reward delay
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          action assignment "Assign stateAnalogOut 119": variable=stateAnalogOut, value=40/50*5
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 5": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 6": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1110": variable=stateAnalogOut, value=45/50*5
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse reward_line": variable=reward_line, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 2": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 3": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 4": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 5": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 6": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 7": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 8": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action assignment "Assign labjack_target_on": variable=labjack_target_on, value=0
          action assignment "Assign labjack_cue_on": variable=labjack_cue_on, value=0
          action assignment "Assign labjack_fixation_on": variable=labjack_fixation_on, value=0
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1111": variable=stateAnalogOut, value=50/50*5
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          action assignment "Assign stateAnalogOut 1112": variable=stateAnalogOut, value=0
          transition timer_expired "If ITI Expired, Transition to ITI2": target=ITI2, timer=ITI
        task_system_state "ITI2"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System 2": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to Fix On": target=Fix On
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 6": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 7": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1113": variable=stateAnalogOut, value=40/50*5
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to End Trial": target=End Trial, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue 4": stimulus=ready_cue
          action dequeue_stimulus "Dequeue set2 cue 6": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 19"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action assignment "Compute Production Time": variable=productionInterval, value=(ready_cue_onset_time_us-now())/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "After Set2"
          action assignment "Compute Production Time": variable=productionInterval, value=(ready_cue_onset_time_us-now())/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "No Saccade"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 13": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1114": variable=stateAnalogOut, value=0
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
              action assignment "Assign ballAlpha": variable=ballAlpha, value=min(ballAlpha+dballAlphaIncorrect, maxBallAlpha)
              action assignment "Assign radius": variable=radius, value=radius + radiusStep
              action assignment "Assign win_fraction 3": variable=win_fraction, value=win_fraction+dwin
              action assignment "Assign ballAlphaProd 3": variable=ballAlphaProd, value=min(ballAlphaProd+dballAlphaIncorrect, maxBallAlphaProd)
              action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
            action if "Else": condition=!afterSet2
              action assignment "Assign ballAlpha 2": variable=ballAlpha, value=ballAlpha
              action assignment "Assign radius 6": variable=radius, value=radius 
              action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
              action assignment "Assign flashRate": variable=flashRate, value=flashRate
          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Assign totalRewDur 3": variable=totalRewDur, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 115": stimulus=cursor
          action dequeue_stimulus "Dequeue Fix 14": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 2": stimulus=Fix2
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Exit State System"
          transition yield "Return to parent task system"
