monkeyml version=1.0
io_devices "IO Devices"
  iodevice stimulus_display "Stimulus Display": background_color=0.3, 0.3, 0.3, announce_stimuli_on_implicit_updates=YES
  iodevice eyelink "Eyelink 1000": data_interval=1ms, tracker_ip=100.1.1.1, pupil_lx=eyeRX, pupil_ly=eyeRY, pupil_size_l=pupil_size, tracking_dist=1024
  calibrator linear_eye_calibrator "Eye Cal": eyeh_raw=eyeRX, eyev_raw=eyeRY, eyeh_calibrated=eye_x, eyev_calibrated=eye_y
  iodevice usbhid_generic "USB HID Device": usage_page=1, usage=6, log_all_input_values=NO
    iochannel usbhid_generic_input_channel "USB HID Input Channel - spacebar": usage_page=7, usage=44, value=buttonPressed
    iochannel usbhid_generic_input_channel "USB HID Input Channel 2": usage_page=7, usage=80, value=leftArrowDown
    iochannel usbhid_generic_input_channel "USB HID Input Channel 3": usage_page=7, usage=79, value=rightArrowDown
    iochannel usbhid_generic_input_channel "USB HID Input Channel 4": usage_page=7, usage=17, value=nN
    iochannel usbhid_generic_input_channel "USB HID Input Channel 5": usage_page=7, usage=16, value=mM
  iodevice mouse_input "Mouse Input Device": mouse_position_x=mouseX, mouse_position_y=mouseY, mouse_down=click, hide_cursor=NO
variables "Variables"
  folder "Eye"
    variable any "eyeRX": groups=Eye, default_value=0, persistant=0
    variable any "eyeRY": groups=Eye, default_value=0, persistant=0
    variable any "eye_x": groups=Eye, default_value=0, persistant=0
    variable any "eye_y": groups=Eye, default_value=0, persistant=0
    variable any "pupil_size": groups=Eye, default_value=0, persistant=0
  folder "IO"
    variable any "ao0": groups=I/O, default_value=0, persistant=0
    variable any "doWord": groups=I/O, default_value=0, persistant=0
    variable any "doStrobe": groups=I/O, default_value=0, persistant=0
    variable any "buttonPressed": groups=I/O, default_value=0, persistant=0
    variable any "leftArrowDown": groups=I/O, default_value=0, persistant=0
    variable any "rightArrowDown": groups=I/O, default_value=0, persistant=0
    variable any "nN": groups=I/O, default_value=0, persistant=0
    variable any "mM": groups=I/O, default_value=0, persistant=0
  folder "Reward 2"
    variable any "rewardOut": groups=Reward, default_value=0, persistant=0
    variable any "rewardDur": groups=Reward, default_value=200, persistant=0
  folder "Fixation"
    variable any "fix_win": groups=Fixation, default_value=3, persistant=1
    variable any "fix_sz": groups=Fixation, default_value=0.5, persistant=0
    variable any "NoFixWaitDur": groups=Fixation, default_value=5000, persistant=1
    variable any "fixWaitDur": groups=Fixation, default_value=10000, persistant=1
    variable any "fixY": groups=Fixation, default_value=0, persistant=0
    variable any "fixX": groups=Fixation, default_value=0, persistant=0
    variable any "fixOn": groups=Fixation, default_value=0, persistant=0
    variable any "fix_red": groups=Fixation, default_value=1, persistant=0
    variable any "fix_green": groups=Fixation, default_value=1, persistant=0
    variable any "fix_blue": groups=Fixation, default_value=1, persistant=0
  folder "Target"
    variable any "targetOn": groups=Target, default_value=0, persistant=0
    variable any "theta": groups=Target, default_value=180, persistant=0
    variable any "thetaFeedback": groups=Target, default_value=0, persistant=0
    variable any "theta2": groups=Target, default_value=180, persistant=0
    variable any "theta_min": groups=Target, default_value=0, persistant=0
    variable any "theta_max": groups=Target, default_value=180, persistant=0
    variable any "theta_N": groups=Target, default_value=2, persistant=0
    variable any "amp": groups=Trial, default_value=7.5, persistant=0
    variable any "on_targ": groups=Target, default_value=0, persistant=0
    variable any "targ_red": groups=Target, default_value=1, persistant=0
    variable any "targ_green": groups=Target, default_value=1, persistant=0
    variable any "targ_blue": groups=Target, default_value=1, persistant=0
    variable any "targ_sz": groups=Target, default_value=0.7, persistant=0
    variable any "target_x": groups=Target, default_value=0, persistant=0
    variable any "target_x2": groups=Target, default_value=0, persistant=0
    variable any "target_y": groups=Target, default_value=0, persistant=0
    variable any "target_y2": groups=Target, default_value=0, persistant=0
    variable any "target_alpha": groups=Target, default_value=1, persistant=1
    variable any "targetTimeDur": groups=Target, default_value=1000, persistant=0
  folder "Maze"
    variable any "localTrials": groups=Trial, default_value=0, persistant=0
    variable any "idFreeView": groups=Trial, default_value=0, persistant=0
    variable any "trialNumBlock": groups=Trial, default_value=100, persistant=0
    variable any "trialNum": groups=Trial, default_value=960, persistant=0
    variable list "nTurn": groups=Maze, default_value=[], persistant=1
    variable any "nTurnTrial": groups=Maze, default_value=0, persistant=1
    variable list "yTurn0": groups=Maze, default_value=[], persistant=1
    variable list "xTurn0": groups=Maze, default_value=[], persistant=1
    variable list "yTurn1": groups=Maze, default_value=[], persistant=1
    variable list "xTurn1": groups=Maze, default_value=[], persistant=1
    variable any "yTurn0Trial": groups=Maze, default_value=0, persistant=1
    variable any "xTurn0Trial": groups=Maze, default_value=0, persistant=1
    variable any "yTurn1Trial": groups=Maze, default_value=0, persistant=1
    variable any "xTurn1Trial": groups=Maze, default_value=0, persistant=1
    variable list "dist": groups=Maze, default_value=[], persistant=1
    variable any "distTrial": groups=Maze, default_value=0, persistant=1
    variable list "speed": groups=Maze, default_value=[], persistant=1
    variable any "speedTrial": groups=Maze, default_value=0, persistant=1
    variable list "ts": groups=Maze, default_value=[], persistant=1
    variable any "tsTrial": groups=Maze, default_value=0, persistant=1
    variable list "xTurn": groups=Maze, default_value=[], persistant=1
    variable list "yTurn": groups=Maze, default_value=[], persistant=1
    variable any "xSize": groups=Maze, default_value=12, persistant=1
    variable any "xSizePix": groups=Maze, default_value=1000, persistant=1
    variable any "ySize": groups=Maze, default_value=12, persistant=1
    variable any "ySizePix": groups=Maze, default_value=1000, persistant=1
    variable any "imW": groups=Maze, default_value=[], persistant=1
    variable any "imH": groups=Maze, default_value=[], persistant=1
    variable any "deg2pix": groups=Maze, default_value=70, persistant=1
    variable any "mazeTimeDur": groups=Maze, default_value=1000, persistant=1
    variable any "ballDur": groups=Maze, default_value=500, persistant=1
    variable any "ballFrames": groups=Maze, default_value=15, persistant=1
    variable any "stimEnding": groups=Trial, default_value=0, persistant=0
    variable any "ball_sz": groups=MovingBall, default_value=0.3, persistant=1
    variable any "nTimeTs": groups=MovingBall, default_value=6, persistant=1
    variable list "tp": groups=MovingBall, default_value=[], persistant=1
    variable any "iT": groups=MovingBall, default_value=0, persistant=1
    variable any "pCatch": groups=MovingBall, default_value=0.05, persistant=1
    variable any "idCatch": groups=MovingBall, default_value=0, persistant=1
    variable any "mouseX": groups=MovingBall, default_value=0, persistant=1
    variable any "xCatch": groups=MovingBall, default_value=0, persistant=1
    variable any "mouseY": groups=MovingBall, default_value=0, persistant=1
    variable any "yCatch": groups=MovingBall, default_value=0, persistant=1
    variable any "tCatch": groups=MovingBall, default_value=0, persistant=1
    variable any "click": groups=MovingBall, default_value=0, persistant=1
  folder "Global"
    variable integer "override": groups=Target, default_value=0, persistant=0
    variable float "theta_override": groups=Target, default_value=0, persistant=0
    variable any "pstop": groups=Trial, default_value=0, persistant=0
    variable any "startTrial": groups=Trial, default_value=0, persistant=0
    variable any "endTrial": groups=Trial, default_value=0, persistant=0
    variable any "trialNumBlockShort": groups=Trial, default_value=10, persistant=0
    variable any "minTrialNumBlock": groups=Trial, default_value=175, persistant=0
    variable any "minTrialNumBlock2": groups=Trial, default_value=850, persistant=0
    variable any "meanTrialNumBlock": groups=Trial, default_value=5, persistant=0
    variable any "maxTrialNumBlock": groups=Trial, default_value=20, persistant=0
    variable any "trialNumBlockLong": groups=Trial, default_value=10, persistant=0
    variable any "trialNumPrior": groups=Trial, default_value=25, persistant=0
    variable any "consecutiveCorrect": groups=Reward, default_value=0, persistant=0
    variable any "nReversal": groups=Reward, default_value=0, persistant=0
    variable any "maxReversal": groups=Reward, default_value=100, persistant=0
    variable any "bonusRewDur": groups=Reward, default_value=0, persistant=0
    variable any "dbonus": groups=Reward, default_value=10, persistant=0
    variable any "timeRemaining": groups=Trial, default_value=0, persistant=0
    variable any "trialDuration": groups=Trial, default_value=2000, persistant=0
    variable any "saccadeTimeDur": groups=Trial, default_value=300, persistant=0
    variable any "memoryTimeDur": groups=Memory, default_value=1000, persistant=0
    variable any "GraceTimeDur": groups=Trial, default_value=100, persistant=0
    variable any "fix_time_dur": groups=Fixation, default_value=0, persistant=0
    variable any "fix_dur_min": groups=Fixation, default_value=250, persistant=1
    variable any "fix_dur_mean": groups=Fixation, default_value=250, persistant=1
    variable any "tFixOn": groups=Fixation, default_value=0, persistant=1
    variable any "III_dur": groups=Fixation, default_value=500, persistant=0
    variable any "III2_dur": groups=Fixation, default_value=500, persistant=0
    variable any "III3_dur": groups=Fixation, default_value=500, persistant=0
    variable any "III4_dur": groups=Fixation, default_value=500, persistant=0
    variable any "III5_dur": groups=Fixation, default_value=500, persistant=0
    variable any "III2_dur_min": groups=Fixation, default_value=500, persistant=0
    variable any "III2_dur_mean": groups=Fixation, default_value=0, persistant=0
    variable any "III_dur_min": groups=Fixation, default_value=500, persistant=1
    variable any "III_dur_mean": groups=Fixation, default_value=500, persistant=1
    variable any "III_dur_max": groups=Fixation, default_value=500, persistant=1
    variable any "target_dur_min": groups=Target, default_value=250, persistant=1
    variable any "target_dur_mean": groups=Target, default_value=250, persistant=1
    variable any "memory_dur_min": groups=Memory, default_value=2000, persistant=1
    variable any "memory_dur_mean": groups=Memory, default_value=0, persistant=1
    variable any "iti": groups=Trial, default_value=200, persistant=1
    variable any "minBreakDur": groups=Trial, default_value=5000, persistant=1
    variable any "timeout": groups=Trial, default_value=300, persistant=1
  folder "Fixation+Pursuit"
    variable any "pursuitTheta": groups=Fixation, default_value=0, persistant=0
    variable any "on_fix_dyn": groups=Fixation, default_value=0, persistant=0
    variable any "fixHz": groups=Fixation, default_value=0.25, persistant=0
    variable any "fixDynMag": groups=Fixation, default_value=8, persistant=0
    variable any "tStart": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_trials": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_correct": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_HoldDur": groups=Fixation, default_value=2500, persistant=1
    variable any "tEarlyTMS": groups=Fixation, default_value=500, persistant=1
    variable any "tLateTMS": groups=Fixation, default_value=1000, persistant=1
    variable any "fix_pur_ITI_Dur": groups=Fixation, default_value=250, persistant=1
    variable any "fix_pur_timeoutDur": groups=Fixation, default_value=1500, persistant=1
  folder "Fixation+Distractor"
    variable any "fix_dis_trials": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_correct": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOnset_min": groups=Distractor, default_value=100, persistant=1
    variable any "distractorOnset_mu": groups=Distractor, default_value=100, persistant=1
    variable any "distractorOnset_time": groups=Distractor, default_value=0, persistant=0
    variable any "distractorTime_min": groups=Distractor, default_value=100, persistant=1
    variable any "distractorTime_mu": groups=Distractor, default_value=100, persistant=1
    variable any "distractorTime": groups=Distractor, default_value=0, persistant=0
    variable any "distractorSize": groups=Distractor, default_value=0.5, persistant=0
    variable any "distractor_alpha": groups=Distractor, default_value=1, persistant=0
    variable any "distractor_x": groups=Distractor, default_value=0, persistant=0
    variable any "distractor_y": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOn": groups=Distractor, default_value=0, persistant=0
    variable boolean "DistractorSimultaneous": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_ITI_Dur": groups=Distractor, default_value=750, persistant=1
  folder "OverlapSaccade"
    variable any "OverlapSaccade_correct": groups=Overlap, default_value=0, persistant=0
    variable any "OverlapSaccade_trials": groups=Overlap, default_value=0, persistant=0
  folder "MemorySaccade"
    variable any "MemorySaccade_correct": groups=Memory, default_value=0, persistant=0
    variable any "MemorySaccade_trials": groups=Memory, default_value=0, persistant=0
  folder "MovingBall"
    variable any "iTrial": groups=MovingBall, default_value=0, persistant=0
    variable any "MovingBall_correct": groups=MovingBall, default_value=0, persistant=0
    variable any "productionInterval": groups=MovingBall, default_value=0, persistant=0
    variable any "productionInterval2": groups=MovingBall, default_value=0, persistant=0
    variable any "productionInterval3": groups=MovingBall, default_value=0, persistant=0
    variable any "interval": groups=MovingBall, default_value=800, persistant=0
    variable any "interval_min": groups=MovingBall, default_value=500, persistant=1
    variable any "interval_max": groups=MovingBall, default_value=1000, persistant=1
    variable any "interval2": groups=MovingBall, default_value=800, persistant=0
    variable any "interval2_min": groups=MovingBall, default_value=480, persistant=1
    variable any "interval2_max": groups=MovingBall, default_value=800, persistant=1
    variable any "interval3": groups=MovingBall, default_value=1000, persistant=0
    variable any "interval_N": groups=MovingBall, default_value=5, persistant=1
    variable any "interval2_N": groups=MovingBall, default_value=5, persistant=1
    variable list "intervalList": groups=MovingBall, default_value=0, persistant=0
    variable list "intervalList2": groups=MovingBall, default_value=0, persistant=0
    variable float "nIntervalList2": groups=MovingBall, default_value=6000, persistant=0
    variable list "intervalListGaussPrior": groups=MovingBall, default_value=0, persistant=0
    variable integer "nIntervalListGaussPrior": groups=MovingBall, default_value=10000, persistant=0
    variable list "intervalListGaussPrior2": groups=MovingBall, default_value=0, persistant=0
    variable integer "nIntervalListGaussPrior2": groups=MovingBall, default_value=10000, persistant=0
    variable float "ratio": groups=MovingBall, default_value=0.63029, persistant=0
    variable integer "idShortLong": default_value=0
    variable integer "idFeed": default_value=0
    variable integer "iFeed": default_value=0
    variable integer "offset": default_value=-150
    variable integer "iShortLong": default_value=0
    variable integer "idReproSL": default_value=0
    variable any "Nsets": groups=MovingBall, default_value=1, persistant=1
    variable any "StartTheta": groups=MovingBall, default_value=0, persistant=0
    variable any "intervalFrames": groups=MovingBall, default_value=0, persistant=0
    variable any "interval2Frames": groups=MovingBall, default_value=0, persistant=0
    variable any "interval3Frames": groups=MovingBall, default_value=0, persistant=0
    variable any "radius": groups=MovingBall, default_value=7.5, persistant=1
    variable any "ballArcLength": groups=MovingBall, default_value=180, persistant=1
    variable any "ballFeedback_red": groups=MovingBall, default_value=1, persistant=0
    variable any "ballRed": groups=MovingBall, default_value=1, persistant=0
    variable any "ballGreen": groups=MovingBall, default_value=1, persistant=0
    variable any "ballBlue": groups=MovingBall, default_value=1, persistant=0
    variable any "ballFeedback_green": groups=MovingBall, default_value=1, persistant=0
    variable any "ballFeedback_blue": groups=MovingBall, default_value=1, persistant=0
    variable any "win_fraction": groups=MovingBall, default_value=0.12, persistant=1
    variable any "win_fraction0": groups=MovingBall, default_value=0.12, persistant=1
    variable any "win_fractionStep": groups=MovingBall, default_value=0.01, persistant=1
    variable any "dwin": groups=MovingBall, default_value=0.01, persistant=1
    variable any "acquisitionTime": groups=MovingBall, default_value=0, persistant=0
    variable any "ballAlpha": groups=MovingBall, default_value=1, persistant=0
    variable any "flashAlpha": groups=MovingBall, default_value=1, persistant=1
    variable any "flashRate": groups=MovingBall, default_value=1, persistant=0
    variable any "dflashRate": groups=MovingBall, default_value=0.01, persistant=0
    variable any "Interval1_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "Interval2_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "prodBallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "Interval2BallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "Interval1BallOn": groups=MovingBall, default_value=1, persistant=1
    variable any "ready_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "ready_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "ready2_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "set_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "occluder_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "set_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "go_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "go_ending": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "set3_ended": groups=MovingBall, default_value=0, persistant=0
    variable any "ready_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "go_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "ready_cue_offset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "ready2_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set1_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set_cue_offset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_cue_offset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set_cue_onset_time_us": groups=MovingBall, default_value=0, persistant=0
    variable any "set2_cue_onset_time_us": groups=MovingBall, default_value=1e1000, persistant=0
    variable any "set3_cue_onset_time_us": groups=MovingBall, default_value=1e1000, persistant=0
    variable any "saccade_wait_dur": groups=MovingBall, default_value=4000, persistant=0
    variable any "cue_duration_frames": groups=MovingBall, default_value=3, persistant=1
    variable any "cue_size_deg": groups=MovingBall, default_value=0.25, persistant=1
    variable any "FeedbackTimeDur": groups=MovingBall, default_value=500, persistant=1
    variable boolean "afterReady": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterReady2": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterSet1": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterSet2": groups=MovingBall, default_value=0, persistant=0
    variable boolean "afterSet3": groups=MovingBall, default_value=0, persistant=0
    variable boolean "fixOffMovingBall": groups=MovingBall, default_value=0, persistant=1
    variable any "relativeFixOffTime": groups=MovingBall, default_value=0, persistant=1
    variable any "set2Off": groups=MovingBall, default_value=0, persistant=0
    variable any "setOff": groups=MovingBall, default_value=0, persistant=0
  folder "Matlab"
    variable any "sync": groups=Matlab, default_value=0, persistant=0
    variable any "Nback": groups=Matlab, default_value=100, persistant=1
  folder "TMS"
    variable any "TMSout": groups=Matlab, default_value=0, persistant=0
    variable any "TMSdur": groups=Matlab, default_value=400, persistant=0
    variable any "tsTMS": groups=Matlab, default_value=150, persistant=0
    variable any "tsTMSmax": groups=Matlab, default_value=400, persistant=0
    variable any "tpTMS": groups=Matlab, default_value=50, persistant=0
    variable any "tpTMSmax": groups=Matlab, default_value=200, persistant=0
    variable any "fixTMSoffset": groups=Matlab, default_value=100, persistant=0
    variable any "tsTMSoffset": groups=Matlab, default_value=100, persistant=0
    variable any "tsTMSoffset2": groups=Matlab, default_value=300, persistant=0
    variable any "tsTMSoffset3": groups=Matlab, default_value=400, persistant=0
    variable any "tsTMSoffset4": groups=Matlab, default_value=300, persistant=0
    variable any "tsTMSoffset5": groups=Matlab, default_value=200, persistant=0
    variable any "tpTMSoffset": groups=Matlab, default_value=100, persistant=0
    variable any "tpTMSoffset2": groups=Matlab, default_value=300, persistant=0
    variable any "TMSpulseDur": groups=Matlab, default_value=100, persistant=0
    variable any "TMSonset": groups=Matlab, default_value=0, persistant=0
    variable any "TMS_wait_dur": groups=Matlab, default_value=250, persistant=0
    variable any "idTMS": groups=Matlab, default_value=0, persistant=0
    variable any "idLocTMS": groups=Matlab, default_value=0, persistant=0
    variable any "TMS_dur_min": groups=Fixation, default_value=750, persistant=1
    variable any "TMS_dur_mean": groups=Fixation, default_value=500, persistant=1
  folder "Distractor 2"
    variable integer "idMeasDelayProd": default_value=0
    variable any "sumMin": groups=Matlab, default_value=2, persistant=0
    variable any "sumMax": groups=Matlab, default_value=5, persistant=0
    variable any "sum": groups=Matlab, default_value=2, persistant=0
    variable any "sumShown": groups=Matlab, default_value=2, persistant=0
    variable any "sumShown_x": groups=Matlab, default_value=3, persistant=0
    variable any "sumShown_y": groups=Matlab, default_value=0, persistant=0
    variable any "augend": groups=Matlab, default_value=0, persistant=0
    variable any "augend_x": groups=Matlab, default_value=-4, persistant=0
    variable any "augend_y": groups=Matlab, default_value=0, persistant=0
    variable any "addend": groups=Matlab, default_value=0, persistant=0
    variable any "addend_x": groups=Matlab, default_value=-1, persistant=0
    variable any "addend_y": groups=Matlab, default_value=0, persistant=0
    variable integer "idIncorrect": groups=Matlab, default_value=1, persistant=1
    variable integer "idCorrectResp": groups=Matlab, default_value=1, persistant=1
    variable integer "dIncorrect": groups=Matlab, default_value=1, persistant=1
    variable any "distract_FP_mean": groups=Matlab, default_value=100, persistant=1
    variable any "distract_FP_min": groups=Matlab, default_value=200, persistant=1
    variable any "distract_FP_max": groups=Matlab, default_value=400, persistant=1
    variable any "distract_dur": groups=Matlab, default_value=400, persistant=1
    variable any "distract_FP": groups=Matlab, default_value=200, persistant=1
    variable any "distract_size": groups=Matlab, default_value=1, persistant=1
  folder "NewAdapt"
    variable any "mean_interval": groups=Matlab, default_value=840, persistant=1
    variable any "diff_interval": groups=Matlab, default_value=90, persistant=1
    variable any "nb_interval": groups=Matlab, default_value=9, persistant=1
    variable any "trial_trans": groups=Matlab, default_value=450, persistant=1
    variable any "min_trial_trans": groups=Matlab, default_value=480, persistant=1
    variable any "mean_trial_trans": groups=Matlab, default_value=550, persistant=1
    variable any "max_trial_trans": groups=Matlab, default_value=700, persistant=1
    variable any "max_trial": groups=Matlab, default_value=1100, persistant=1
    variable any "trial_break": groups=Matlab, default_value=100, persistant=1
    variable any "rand_seed": groups=Matlab, default_value=0, persistant=1
sounds "Sounds"
stimuli "Stimuli"
  folder "Gobal 2"
    stimulus white_noise_background "White Noise Background"
    stimulus blank_screen "New Blank Screen": color=.5,.5,.5
    stimulus circular_fixation_point "Fix": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=fix_sz, y_size=fix_sz, x_position=fixX, y_position=fixY, rotation=0, alpha_multiplier=1
    stimulus circular_fixation_point "Fix2": color=0,0,0, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=fix_sz/5*7, y_size=fix_sz/5*7, x_position=fixX, y_position=fixY, rotation=0, alpha_multiplier=1
    stimulus rectangle "target": color=targ_red,targ_green,targ_blue, x_size=targ_sz, y_size=targ_sz, x_position=target_x, y_position=target_y, alpha_multiplier=target_alpha
    stimulus circular_fixation_point "target_backup": color=targ_red,targ_green,targ_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_targ, x_size=targ_sz, y_size=targ_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
    stimulus circular_fixation_point "target2": color=targ_red,targ_green,targ_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_targ, x_size=targ_sz, y_size=targ_sz, x_position=target_x2, y_position=target_y2, rotation=0, alpha_multiplier=target_alpha
  folder "Fixation+Pursuit 2"
    stimulus frame_list "dynamicFix": stimulus_group=dynamicFixFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "dynamicFixFrames"
      stimulus circular_fixation_point "fixCircleDyn": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_fix_dyn, x_size=fix_sz, y_size=fix_sz, x_position=fixX+cos(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), y_position=fixY+sin(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), rotation=0, alpha_multiplier=1
  folder "Fixation+Distractor 2"
    stimulus circle "Distractor": color=1,1,1, x_size=distractorSize, y_size=distractorSize, x_position=distractor_x, y_position=distractor_y, rotation=0, alpha_multiplier=distractor_alpha
  folder "MovingBall 2"
    stimulus circle "ballFeedback": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=amp*cos((pi()/180)*(StartTheta+(ballArcLength/3)*productionInterval/interval+(ballArcLength*2/3))), y_position=amp*sin((pi()/180)*(StartTheta+(ballArcLength/3)*productionInterval/interval+(ballArcLength*2/3))), rotation=1, alpha_multiplier=1
    stimulus circle "ballFeedbackSE": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=amp*cos((pi()/180)*(theta+2*((productionInterval>(interval-iFeed*offset))-0.5)*((productionInterval-interval+iFeed*offset)*(productionInterval-interval+iFeed*offset))/(interval*interval)*180*4)), y_position=amp*sin((pi()/180)*(theta+2*((productionInterval>(interval-iFeed*offset))-0.5)*((productionInterval-interval+iFeed*offset)*(productionInterval-interval+iFeed*offset))/(interval*interval)*180*4)), rotation=1, alpha_multiplier=1
    stimulus frame_list "ballFeedback2": stimulus_group=ballFeedback_frames2, loop=NO, repeats=round(refreshRate()*FeedbackTimeDur/1000), autoplay=YES
    stimulus_group "ballFeedback_frames2"
      stimulus circle "ballFeedback_frame": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=radius*cos((pi()/180)*(StartTheta+(ballArcLength/2)*productionInterval/interval+(ballArcLength/2))), y_position=radius*sin((pi()/180)*(StartTheta+(ballArcLength/2)*productionInterval/interval+(ballArcLength/2))), rotation=1, alpha_multiplier=1
    stimulus circle "go_frame 2": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength)), rotation=0, alpha_multiplier=flashAlpha
    stimulus rectangle "refLineFeedback": color=1,1,1, x_size=10*ball_sz, y_size=ball_sz/4, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength))
    stimulus circle "ballFlash": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength*idReproSL/2)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength*idReproSL/2)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "ready_cue": stimulus_group=ready_frames, ending=ready_ending, ended=ready_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "ready_frames"
      stimulus circle "ready_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "occluder_cue": stimulus_group=occluder_frames, ended=occluder_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "occluder_frames"
      stimulus circle "occluder_frame": color=0,0,0, x_size=cue_size_deg*4/5, y_size=cue_size_deg*4/5, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set_cue": stimulus_group=set_frames, ending=set_ending, ended=set_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set_frames"
      stimulus circle "set_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength*1/(2))), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength*1/(2))), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set2_cue": stimulus_group=set2_frames, ending=set2_ending, ended=set2_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set2_frames"
      stimulus circle "set2_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength/2)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength/2))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set3_cue": stimulus_group=set3_frames, ended=set3_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set3_frames"
      stimulus circle "set3_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "ready2_cue": stimulus_group=ready2_frames, ended=ready2_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "ready2_frames"
      stimulus circle "ready2_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "go_cue": stimulus_group=go_frames, ending=go_ending, ended=go_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "go_frames"
      stimulus circle "go_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength)), rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "Interval1": stimulus_group=Interval1_frames, ending=Interval1_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval1_frames"
      stimulus circle "Interval1Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=0
    stimulus frame_list "Interval2": stimulus_group=Interval2_frames, ending=Interval2_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval2_frames"
      stimulus circle "Interval2Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=1
  folder "Maze 2"
    stimulus frame_list "ball": stimulus_group=ball_frames, ending=stimEnding, repeats=ballFrames, loop=NO, autoplay=YES
    stimulus_group "ball_frames"
      stimulus circle "ballDynamic": color=ballRed,ballGreen,ballBlue, x_size=ball_sz, y_size=ball_sz, x_position=speedTrial*(ballDur)+xTurn0Trial-speedTrial*((nextFrameTime() - tStart)/1e3), y_position=yTurn0Trial, rotation=1, alpha_multiplier=ballAlpha
    stimulus_group "maze"
      list_replicator "New List Replicator": values=filenames(image/*.png), variable=filename
        stimulus image_file "${filename}": path=${filename}, x_size=imW[iTrial]/deg2pix, y_size=imH[iTrial]/deg2pix, x_position=0, y_position=0, rotation=0.0, alpha_multiplier=1.0, deferred=0
filters "Filters"
optimizers "Optimizers"
experiment "Ready Set Go"
  protocol "RSGmaze": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start keyboard 3": device=USB HID Device
    action start_device_IO "Start mouse": device=Mouse Input Device
    action run_python_file "Load script": path=loadParams.py
    action run_python_file "Load script 2": path=saveParams.py
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "block": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials"
        task_system_state "Initial"
          action assignment "Assign iTrial": variable=iTrial, value=0
          action run_python_string "Run Python String - loadParams": code=loadParams(), stop_on_failure=YES
          action assignment "initialize win_fraction": variable=win_fraction, value=win_fraction0
          action assignment "initialize tp": variable=tp, value=nTurn
          action assignment "Assign iT": variable=iT, value=0
          action while "while iT<trialNum": condition=iT<trialNum
            action assignment "Assign tp": variable=tp[iT], value=0
            action assignment "Assign iT": variable=iT, value=iT+1
          transition conditional "if buttonPressed spacebar, feed start": condition=buttonPressed, target=Fix On
        task_system_state "Fix On"
          action assignment "Assign nTurnTrial": variable=nTurnTrial, value=nTurn[iTrial]
          action assignment "Assign distTrial in deg": variable=distTrial, value=dist[iTrial]/deg2pix
          action assignment "Assign speedTrial in deg per ms": variable=speedTrial, value=speed[iTrial]/deg2pix
          action assignment "Assign tsTrial in msec": variable=tsTrial, value=ts[iTrial]
          action assignment "Assign yTurn0Trial in deg cooridnate": variable=yTurn0Trial, value=-(yTurn0[iTrial])/deg2pix
          action assignment "Assign yTurn1Trial in deg cooridnate": variable=yTurn1Trial, value=-(yTurn1[iTrial])/deg2pix
          action assignment "Assign xTurn0Trial in deg cooridnate 2": variable=xTurn0Trial, value=(xTurn0[iTrial])/deg2pix
          action assignment "Assign xTurn1Trial in deg cooridnate 2": variable=xTurn1Trial, value=(xTurn1[iTrial])/deg2pix
          action assignment "Assign xSizePix": variable=xSizePix, value=imW[iTrial]
          action assignment "Assign ySizePix": variable=ySizePix, value=imH[iTrial]
          action assignment "Assign xSize": variable=xSize, value=xSizePix/deg2pix
          action assignment "Assign ySize": variable=ySize, value=ySizePix/deg2pix
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action assignment "Assign afterReady 2": variable=afterReady, value=0
          action assignment "Assign afterSet4": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "When fixOn, go to Trial Start": condition=1==1, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Select interval in ms": variable=interval, value=tsTrial
          action report "Report interval": message=$interval
          action assignment "Assign ballFrames": variable=ballFrames, value=round(refresh_rate()*ballDur/1000)
          action assignment "Assign saccade_wait_dur 2": variable=saccade_wait_dur, value=nTimeTs*interval
          action assignment "Set target_x": variable=target_x, value=xTurn1Trial
          action assignment "Set target_y": variable=target_y, value=yTurn1Trial
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          transition direct "Always Go to Maze on": target=Maze On
        task_system_state "Maze On"
          action report "Report iTrial 2": message=$iTrial
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action queue_stimulus "Queue maze": stimulus=maze[iTrial]
          action live_queue_stimulus "Live Queue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "(BackUp) Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start mazeTime": timer=mazeTime, duration=mazeTimeDur, duration_units=ms
          transition timer_expired "If mazeTime Expired, Transition to Ready": target=Ready, timer=mazeTime
        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=now()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action live_queue_stimulus "Live Queue ball 2": stimulus=ball
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "When stimEnding, go to Set 2": condition=stimEnding, target=Set 2
        task_system_state "Set 2"
          action dequeue_stimulus "Dequeue ball cue": stimulus=ball
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If idFreeView==0": condition=idFreeView==0
            action assignment "Assign fixY yTurn0Trial": variable=fixY, value=yTurn0Trial
            action assignment "Assign fixX xTurn0Trial": variable=fixX, value=xTurn0Trial
            action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition direct "Always Go to Production Interval": target=Production Interval
        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If buttonPressed Transition to Production 3": condition=buttonPressed, target=Production
          transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
        task_system_state "Production"
          action assignment "Assign productionInterval 2": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign tp": variable=tp[iTrial], value=productionInterval
          action report "Report productionInterval": message=$productionInterval
          action assignment "Assign acquisitionTime 2": variable=acquisitionTime, value=now()
          transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
          transition direct "Always Go to Early or Late": target=Early or Late
        task_system_state "Production 2"
          action assignment "Assign productionInterval 2": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign tp": variable=tp[iTrial], value=productionInterval
          action report "Report productionInterval": message=$productionInterval
          action assignment "Assign acquisitionTime 2": variable=acquisitionTime, value=now()
          transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
          transition direct "Always Go to Early or Late": target=Early or Late
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action update_stimulus_display "Update Stimulus Display"
          action assignment "update win_fraction": variable=win_fraction, value=max(win_fraction-win_fractionStep,0)
          action assignment "Increment MovingBall_correct 2": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Assign thetaFeedback 9": variable=thetaFeedback, value=2*((productionInterval>(interval-iFeed*offset))-0.5)*((productionInterval-interval+iFeed*offset)*(productionInterval-interval+iFeed*offset))/(interval*interval)*180*4
          action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur, duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action run_python_string "Run Python String - saveParams 2": code=saveParams(), stop_on_failure=YES
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue target 2": stimulus=ball
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=1
          action dequeue_stimulus "Dequeue maze": stimulus=maze[iTrial]
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action if "If idFreeView==0": condition=idFreeView==0
            action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action assignment "Assign fixY yTurn0Trial 2": variable=fixY, value=yTurn0Trial
          action assignment "Assign fixX xTurn0Trial 2": variable=fixX, value=xTurn0Trial
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix
          action assignment "Increment iTrial": variable=iTrial, value=iTrial+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If (iTrial%(trialNumBlock))==0 && iTrial>0, Transition to Break": condition=(iTrial%(trialNumBlock))==0 && iTrial>0, target=Break
          transition conditional "If iTrial==trialNum && iTrial>0, Transition to Exit State System": condition=iTrial==trialNum && iTrial>0, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action if "If early, yellow": condition=(productionInterval - interval)/interval < -(win_fraction)
            action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action if "If late, red": condition=(productionInterval - interval)/interval > win_fraction
            action assignment "Set targ_green to 2": variable=targ_green, value=0
            action assignment "Set targ_blue to 3": variable=targ_blue, value=0
          action assignment "Set ballFeedback_green to 0": variable=ballFeedback_green, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign win_fraction 4": variable=win_fraction, value=win_fraction+win_fractionStep
          action assignment "Assign thetaFeedback 10": variable=thetaFeedback, value=2*((productionInterval>(interval-iFeed*offset))-0.5)*((productionInterval-interval+iFeed*offset)*(productionInterval-interval+iFeed*offset))/(interval*interval)*180*4
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - ready_cue_onset_time_us -interval*2000) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Set1"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet1": variable=afterSet1, value=1
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue set2 cue 3": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "No Saccade"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          action report "Report failure 3": message=no saccade.
          transition direct "Always Go to Bad": target=Bad
        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout 3": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial 3": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Break"
          action report "Report break": message=Break.
          action assignment "Assign idFreeView": variable=idFreeView, value=1-idFreeView
          transition conditional "if buttonPressed spacebar, feed FixOn": condition=buttonPressed, target=Fix On
        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "Fixation+Pursuit_H": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action live_queue_stimulus "Live Queue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If on_fix_dyn, Transition to Trial Start": condition=on_fix_dyn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=0
        action start_timer "Start HoldFix": timer=HoldFix, duration=fix_pur_HoldDur, duration_units=ms
        transition conditional "If !on_fix_dyn, Transition to Bad": condition=!on_fix_dyn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to Reward": target=Reward, timer=HoldFix
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_pur_correct": variable=fix_pur_correct, value=fix_pur_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_pur_trials": variable=fix_pur_trials, value=fix_pur_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Pursuit System": condition=localTrials >= trialNum, target=Exit Fixation Pursuit System
        transition conditional "If pstop, Transition to Exit Fixation Pursuit System": condition=pstop, target=Exit Fixation Pursuit System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_pur_ITI": timer=fix_pur_ITI, duration=fix_pur_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_pur_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Pursuit System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "Fixation+Pursuit_V": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action live_queue_stimulus "Live Queue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If on_fix_dyn, Transition to Trial Start": condition=on_fix_dyn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=90
        action start_timer "Start HoldFix": timer=HoldFix, duration=fix_pur_HoldDur, duration_units=ms
        transition conditional "If !on_fix_dyn, Transition to Bad": condition=!on_fix_dyn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to Reward": target=Reward, timer=HoldFix
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_pur_correct": variable=fix_pur_correct, value=fix_pur_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_pur_trials": variable=fix_pur_trials, value=fix_pur_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Pursuit System": condition=localTrials >= trialNum, target=Exit Fixation Pursuit System
        transition conditional "If pstop, Transition to Exit Fixation Pursuit System": condition=pstop, target=Exit Fixation Pursuit System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_pur_ITI": timer=fix_pur_ITI, duration=fix_pur_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_pur_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Pursuit System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
