var data_file = ""
var tmp=0
var index=0
var var_debug = 0

group Reward {
    var reward_line = 0 (groups = Reward)
    var rewardDur = 100 // 80 // 70 // 90 (groups = Reward)
    var bonusRewDur = 10 // 5 // 15  (groups = Reward)
    var reward_gain_cue_first=0.2 // 0.5 // 50% of reward
}

group Fixation {
    var fixY = 0 (groups = Fixation)
    var fixX = 0 (groups = Fixation)
    var fixY_offset=0.8 // to minimize overlap with cue objects

    var fix_win = 6 (
        groups = Fixation
        persistant = 1
        )
    var fix_sz = 0.3 (groups = Fixation)

    var fixWaitDur = 10000 (groups = Fixation)
    var fixOn = 0 (groups = Fixation)

    var fix_red = 1 (groups = Fixation)
    var fix_green = 1 (groups = Fixation)
    var fix_blue = 1 (groups = Fixation)

    var fix_red_static = 1  (groups = Fixation)
    var fix_green_static = 1 (groups = Fixation)
    var fix_blue_static = 1 (groups = Fixation)

    var pursuitTheta = -90 (groups = Fixation) // down; if 0, horizontal
    var nRep = 1 (groups = Fixation) // 3
    var trialNum = 1e6  (groups = Fixation) // after this # trials, stop experiment
    var on_fix_dyn = 0 (groups = Fixation)
    var on_fix_static = 0 (groups = Fixation)


}


group Matlab {
    var sync = 0 (groups = Matlab)
    var Nback = 100 (
        groups = Matlab
        persistant = 1
        )
}

group Time {
    //time stamps for eye movement analysis
    var tStart = 0
    var tFix = 0
    var tTargetOn = 0
    var tTargetOff = 0
    var tCueOn=0
    var tCueOff=0
    var tFixOff = 0
    var tResponse = 0
    var tRew = 0
    var tEnd = 0
    var flag_response=0 // to count down timer after off from fixation
    var tResponse0=0
}

group Duration {
    var fixTimeDur = 0
    var fixTimeDurMean = 250
    var fixTimeDurMin = 250

    var targetTimeDur = 0
    var targetTimeDurMean = 250
    var targetTimeDurMin = 750 // 500 // 250

    var occluderTimeDur = 0 // not used
    var occluderTimeDurMean = 250
    var occluderTimeDurMin = 500 // 250

    var cueToGoDur = 0.0001 // to prevent division by zero
    var cueToGoDurMean = 250
    var cueToGoDurMin = 500

    var secondCueDur=200

    var memoryTimeDur = 0.0001 // to prevent division by zero
    var memoryTimeDurMean = 250
    var memoryTimeDurMin = 500

    var targetWait = 5000//10000
    var targetWait0 = 5000//10000

    var responseRegister = 100

    var incorrectDur = 5000
    var NoFixWaitDur = 2000
    var ITI = 500
    var timeout = 2000

    var id_ramp_opacity= 0 // 1 // if (id_ramp_opacity==0), object_alpha=object_alpha_memory
}

group target_window{ // just for target fixation window
    var target_red=1
    var target_green=1
    var target_blue=1
    var target_win = 3 // 5
    var on_target=0
    var target_sz = 0.00001 // 0.5
    var target_radius= 3 // distance b/t target and cue
    var target_theta=0
    var target_id=0
    var targetX = 0
    var targetY = 0
    var targetX_final = 0
    var targetY_final = 0
    var nTarget = 4 // 2 // 4
    var target_alpha=0 //1
    var target_alpha_memory=0.01
    var delta_alpha=0
}

group cue_window{ // to record p(saccade first to cue) & give penalty
    var cue_win = 3
    var on_cue=0
    var id_cue_first=0
}

group occluder{

    var occluder_red = .5
    var occluder_green = .5
    var occluder_blue = .5
    var occluder_size = 2
    var occluder_alpha = 0 // 1
    var occluder_alpha_baseline = 0.001 // 1
    var occluder_alpha_feedback = 0.01 // 1

    var nOccluder =  4// 8 // 4 // # occluder

    var occluderX=[1:nOccluder]
    var occluderY=[1:nOccluder]
}

group occluder_target{ // just for target fixation window
    var on_occluder_target0=false
    var on_occluder_target1=false
    var on_occluder_target2=false
    /*
    var on_occluder_target3=false // # occluder
    var on_occluder_target4=false
    var on_occluder_target5=false
    var on_occluder_target6=false
    */

    var on_occluder_target=[1:(nOccluder-1)] // does not work
    var occluder_targetX = [1:(nOccluder-1)]
    var occluder_targetY = [1:(nOccluder-1)]
}

group object{ // banana
    var object_red=1 // oragne [1 .5 0]
    var object_green=.5
    var object_blue=0
    var object_sz = 3
    var object_theta=0
    var objectX = 0
    var objectY = 0
    var objectX_final = 0
    var objectY_final = 0
    var object_offsetY = 0.5
    var object_alpha=1
    var object_alpha0=1
    var object_alpha_memory=0 // 0.01
    var elapsed_time2 = 0
    var p_memoryTimeDur=0.0001 // 1 // staircase for ramp-down duration
    var delta_memoryTimeDur=0
    var p_memoryTimeDurMin=0.0001
    var p_memoryTimeDurMax=1
}


group cue{ // purple grape
    var cue_red=.5 // purple [0.5 0 1]
    var cue_green=0
    var cue_blue=1

    var circle_size=0.5
    var within_distance=sqrt(pow(circle_size,2)-pow((circle_size/2),2))/(1+sin(30/180*pi())) // 0.288675

    var cue_radius= 8 // 6*circle_size// 8*circle_size// 2*circle_size+object_sz // relative to target/object
    var cue_theta=0
    var cue_nTheta=4
    var cue_id=0

    var cueX = 0
    var cueY = 0

    var cueX_final = 0
    var cueY_final = 0
    var cue_alpha=1
}

group Global {
    var pstop = 0 (groups = Trial)
    var startTrial = 0 (groups = Trial)
    var endTrial = 0 (groups = Trial)
    var localTrials = 0 (groups = Trial)
    var CorrectTrials = 0 (groups = Trial)
    var CorrectTrialsTarget = [0:(nTarget*cue_nTheta-1)] (groups = Trial)
    var IncorrectTrials = 0 (groups = Trial)
    var IncorrectTrialsTarget = [0:(nTarget*cue_nTheta-1)] (groups = Trial)

    var CorrectTrialsCueFirst = 0 (groups = Trial)
    var CorrectTrialsCueFirstTarget = [0:(nTarget*cue_nTheta-1)] (groups = Trial)

    var id_bad = 0 (groups = Trial)

    var id_vector_subtract=0 (groups = Trial)
    var id_subtract_add = 1 (groups = Trial)
}

group photodiode{
    var photodiode_red = 1//.5
    var photodiode_green = 1//.5
    var photodiode_blue = 1//.5
    var photodiode_size = 2.5
    var photodiodeX = -20 // -21.88 // top left
    var photodiodeY = 11.7 // 12.8

    var photodiode_input = 0
}

group labjack{
    var labjack_target_on = 0
    var labjack_cue_on = 0
    var t_labjack_cue_on=0
    var labjack_fixation_on=0
}

group motion {
    var id_cue_motion = 0 // 1 // if 0, no cue motion
    var id_linear_circular = 2 // if 0, linear; if 1, circular(radial); if 2, self-motion

    var motion_direction = 0 // -1 for CW 1 for CCW, if circular; angle [0 90 180 270] if linear
    var angle_rotation=0
    var angle_rotation0=0
    var elapsed_time = 0
    var nAngle0=4 // initial angle from final location 120/nAngle0
}